<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringRead">
          <io:PortName>COM3</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Parse">
        <Pattern>%i</Pattern>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>A</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>COM3</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="vid:VideoCaptureDevice">
          <vid:Index>0</vid:Index>
          <vid:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Video</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SkipUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>test.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>false</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Video</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Timestamp</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="7" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>